PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = AB_pic_singleT2
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Routines
  Routine trial
    VariableComponent curOpacity3
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    VariableComponent maskCol
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    VariableComponent curOpacity2
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    VariableComponent curOpacity
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    VariableComponent curImage
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        curImage = folder + curSet[0]
        curOpacity = 0
        curOpacity2 = 0
        curOpacity3 = .2
      Each Frame:
        t = trialClock.getTime()
        onSets = np.linspace(stimLen+isi, (stimLen+isi)*15, 15)
        offSets = np.linspace(stimLen, (stimLen+isi)*15 - isi, 15)
        if checkForOff: #there's an image on screen and we need to know to take it off
            if t>offSets[ii]:
                print(str(t) + "offset!")
                curOpacity2 = 1
                maskCol = [random.random(), random.random(), random.random()]
                checkForOff = False
                checkForOn = True
        else: #the mask is up right now, check for new image
            if t>onSets[ii]:
                print(str(t) + "onSet!")
                curOpacity2 = 0
                checkForOff = True
                checkForOn = False
                ii = ii + 1
                if ii==15:
                    continueRoutine = False
                    trials.addData('lastPresent', ii-1)
                elif ii==T2_loc+3:
                    trials.addData('lastPresent', ii-1)
                    continueRoutine = False
                else:
                    curImage = folder + curSet[ii]
                    if T1_loc-1==ii:
                        if random.random()<skipProb: #skip target 1
                            curImage = folder + curSet[15]
                            trials.addData('skip1', 1)
                            skip1 = True
                        else:
                            trials.addData('skip1', 0)
                            skip1 = False
                        curOpacity = 1
                    elif T2_loc-1==ii:
                        curImage = "blender.jpg"
                        if random.random()<skipProb: #skip target 2
                            curImage = folder + curSet[16]
                            trials.addData('skip2', 1)
                            skip2 = True
                        else:
                            trials.addData('skip2', 0)
                            skip2 = False

                        curOpacity3 = 1
                    else:
                        curOpacity = 0
                        curOpacity3 = 0
    PolygonComponent polygon
      disabled = True
      fillColor = $[1,0,0]
      opacity [set every frame] = $curOpacity
      shape = triangle
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_3
      disabled = True
      fillColor = $[0,0,1]
      opacity [set every frame] = $curOpacity3
      shape = star
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
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    ImageComponent displayPicture
      image [set every frame] = $curImage
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_2
      fillColor [set every frame] = $[1,1,1]
      lineWidth = 0
      opacity [set every frame] = $curOpacity2
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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  Routine response1
    PolygonComponent polygon_4
      fillColor = $[1,0,0]
      shape = triangle
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        options = [folder + curSet[T1_loc-1]]
        shuffle(options)
        opt1 = options[0]
        trials.addData('opt1_t1', opt1)
      End Routine:
        if key_resp.keys == 'right' and skip1 == False:
            cor1 = 1
        elif key_resp.keys == 'left' and skip1 == True:
            cor1 = 1
        else:
            cor1 = 0

        trials.addData("cor1", cor1)
    ImageComponent option4_t1
      disabled = True
      image [set every repeat] = $opt4
      pos = (0, -.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent option1_t1
      image [set every repeat] = $opt1
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent option2_t1
      disabled = True
      image [set every repeat] = $opt2
      pos = (0, .30)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent option3_t1
      disabled = True
      image [set every repeat] = $opt3
      pos = (.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'left','right', 'down', 'up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response2
    PolygonComponent polygon_5
      fillColor = $[0,0,1]
      shape = star
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent text_6
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        test
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        options = [folder + curSet[T2_loc-1]]
        shuffle(options)
        opt1 = options[0]

        trials.addData('opt1_t1', opt1)
      End Routine:
        if key_resp_2.keys == 'right' and skip2 == False:
            cor2 = 1
        elif key_resp_2.keys == 'left' and skip2 == True:
            cor2 = 1
        else:
            cor2 = 0


        trials.addData("cor2", cor2)
    ImageComponent option1_t2
      disabled = True
      image [set every repeat] = $opt1
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent option2_t2
      disabled = True
      image [set every repeat] = $opt2
      pos = (0, .3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent option3_t2
      disabled = True
      image [set every repeat] = $opt3
      pos = (.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'left','right', 'up', 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_2
      bold = False
      editable = False
      font = Browallia New
      letterHeight = 0.05
      padding = None
      startVal [time (s)] = 0.0
      text =                             ท่านเห็นเครื่องปั่นหรือไม่ 
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  Routine break_2
    VariableComponent breakText
      startExpValue = ""
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    VariableComponent breakTime
      startExpValue = .1
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    CodeComponent code_4
      Code Type = Py
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      Begin Routine:
        try:
            cur = [58,116,174].index(trials2.thisTrialN)
            breakTime = 10000
            if cur==0:
                breakText = "\n    พักสักครู่ ตอนนี้ผ่านการทดลองมาแล้ว 25% กด Spacebar เพื่อเริ่มต้นใหม่ หากท่านพร้อมแล้ว"
            elif cur==1:
                breakText = "\n    พักสักครู่ ตอนนี้ผ่านการทดลองมาแล้ว 50% กด Spacebar เพื่อเริ่มต้นใหม่ หากท่านพร้อมแล้ว"
            else:
                breakText = "\n    พักสักครู่ ตอนนี้ผ่านการทดลองมาแล้ว 75% กด Spacebar เพื่อเริ่มต้นใหม่ หากท่านพร้อมแล้ว"
        except:
            breakTime = .01
            breakText = ""
      Each Frame:
        if breakTime<1:
            continueRoutine = False
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_6
      bold = False
      editable = False
      font = Browallia New
      letterHeight = 0.05
      padding = None
      startVal [time (s)] = 0.0
      text [set every repeat] = $breakText
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  Routine feedback
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        if cor1 == 1 and cor2==1:
            snip1 = "\n                           2/2 ทำถูก"
        if cor1==1 and cor2==0:
            snip1 = "\n                            1/2 ทำถูก"
        if cor1==0 and cor2==1:
            snip1 = "\n                            1/2 ทำถูก"
        if cor1==0 and cor2==0:
            snip1 = "\n                            ผิดทั้งคู่ "


        feedback = snip1
    TextComponent feedbackText
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $feedback
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    TextboxComponent textbox_3
      bold = False
      editable = False
      font = Browallia New
      letterHeight = 0.05
      padding = None
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $feedback
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  Routine instructions
    CodeComponent code_7
      Code Type = Py
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      Begin Experiment:
        import random
        #from sklearn.linear_model import LogisticRegression


        folder = '.\\resources\\'
        picFiles = os.listdir(folder)

        #picFiles = np.random.choice(picFiles, 30, False)
    TextComponent text_3
      disabled = True
      font = Browallia New
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        ในขั้นตอนนี้ ขอให้ท่านตั้งใจมองภาพบนหน้าจอ โดยแต่ละครั้งจะแสดงภาพวัตถุเพียง 1 ชนิด ในเวลา 3 วินาที ขอให้ท่านคิดว่าเป็นภาพวัตถุชนิดใด เมื่อปรากฎเครื่องหมาย + บนหน้าจอ ให้จ้องเครื่องหมาย + ท่านจะเห็นภาพหลายภาพปรากฎขึ้นอย่างรวดเร็ว และจะวนกลับไปที่ภาพแรกเมื่อสิ้นสุดการนำเสนอ ให้กดลูกศรชี้ไปทางขวา “ถ้าท่านเห็นภาพที่คิดไว้” และกดลูกศรไปทางซ้าย “ถ้าท่านไม่เห็นภาพที่คิดไว้”
        นอกจากนี้ ท่านควรมองหารูปเครื่องปั่น โดยเมื่อสิ้นสุดการทดลองผู้วิจัยจะสอบถามเกี่ยวกับรูปเครื่องปั่นอีกครั้ง ทั้งนี้ท่านจะได้รับการฝึกซ้อมก่อนการทดลองจริง และในการทดลองนี้ท่านจะได้รับคำแนะนำเกี่ยวกับผลการทดลองว่าถูกหรือผิด
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent textbox
      bold = False
      borderWidth = 1
      editable = False
      font = Browallia New
      letterHeight = 0.05
      lineSpacing = .75
      padding = None
      startVal [time (s)] = 0.0
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      text:
        ในขั้นตอนนี้ ขอให้ท่านตั้งใจมองภาพบนหน้าจอ โดยแต่ละครั้งจะแสดงภาพวัตถุเพียง 1 ชนิด ในเวลา 3 วินาที ขอให้ท่านคิดว่าเป็นภาพวัตถุชนิดใด เมื่อปรากฎเครื่องหมาย + บนหน้าจอ ให้จ้องเครื่องหมาย + ท่านจะเห็นภาพหลายภาพปรากฎขึ้นอย่างรวดเร็ว และจะวนกลับไปที่ภาพแรกเมื่อสิ้นสุดการนำเสนอ ให้กดลูกศรชี้ไปทางขวา ‘ถ้าท่านเห็นภาพที่คิดไว้’ และกดลูกศรไปทางซ้าย ‘ถ้าท่านไม่เห็นภาพที่คิดไว้’
        นอกจากนี้ ท่านควรมองหารูปเครื่องปั่น โดยเมื่อสิ้นสุดการทดลองผู้วิจัยจะสอบถามเกี่ยวกับรูปเครื่องปั่นอีกครั้ง ทั้งนี้ท่านจะได้รับการฝึกซ้อมก่อนการทดลองจริง และในการทดลองนี้ท่านจะได้รับคำแนะนำเกี่ยวกับผลการทดลองว่าถูกหรือผิด กด Spacebar เพื่อเริ่มการฝึกใช้งาน
  Routine mainInstructions
    TextComponent text_4
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = test
      wrapWidth = 1.5
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        correctRecord = []
        curStimTim = .1
        stimTimRec = []
        params = np.array([-10,150])
    TextboxComponent textbox_4
      bold = False
      editable = False
      font = Browallia New
      letterHeight = 0.05
      lineSpacing = .75
      padding = None
      startVal [time (s)] = 0.0
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      text:
        ยอดเยี่ยม ! ท่านผ่านการฝึกใช้การแล้ว ต่อไปท่านจะเข้าสู่การทดลอง ซึ่งมีลักษณะเช่นเดียวกับที่ท่านได้ฝึกมาก่อนหน้านี้ ยกเว้นว่าในการทดลองนี้ท่านจะได้รับคำตอบว่าท่านตอบถูกหรือผิด ทั้งนี้การแสดงภาพในการหน้าจะจอจะเพิ่มความรวดเร็วขึ้น ซึ่งจะทำให้ท่านรู้สึกยากขึ้น ขอให้ท่านไม่ต้องกังวลใจ และทำการทดลองอย่างเต็มความสามารถ และเป็นความจริงที่สุด

        กด Spacebar
  Routine options
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        curSet = np.random.choice(picFiles,17, False)
        shuffle(curSet)
        for kk in range(0,17):
            trials.addData('img'+str(kk), curSet[kk])

        ii = 0
        curImage = folder + curSet[ii]
        checkForOff = True
        checkForOn = False

        options = [folder + curSet[T1_loc-1],  folder + curSet[T2_loc-1]]
        #shuffle(options)
        opt1 = options[0]
        opt2 = options[1]
        #opt3 = options[2]
        #opt4 = options[3]
    ImageComponent option1
      image [set every repeat] = $opt1
      pos = (0, .3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.75
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    ImageComponent option2
      disabled = True
      image [set every repeat] = $opt2
      pos = (0.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.75
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    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = .5
      text = +
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  Routine response2Main
    PolygonComponent polygon_6
      fillColor = $[0,0,1]
      shape = star
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        options = [folder + curSet[T2_loc-1]]
        shuffle(options)
        opt1 = options[0]

        trials2.addData('opt1_t1', opt1)
      End Routine:
        if key_resp_5.keys == 'right' and skip2 == False:
            cor2 = 1
        elif key_resp_5.keys == 'left' and skip2 == True:
            cor2 = 1
        else:
            cor2 = 0


        trials2.addData("cor2", cor2)
    ImageComponent option1_t2_2
      image [set every repeat] = $opt1
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent option2_t2_2
      disabled = True
      image [set every repeat] = $opt2
      pos = (0, .3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent option3_t2_2
      disabled = True
      image [set every repeat] = $opt3
      pos = (.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent option4_t2_2
      disabled = True
      image [set every repeat] = $opt4
      pos = (0, -.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'left','right', 'up', 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response1Main
    PolygonComponent polygon_7
      fillColor = $[1,0,0]
      shape = triangle
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    CodeComponent code_9
      Code Type = Py
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      Begin Routine:
        options = [folder + curSet[T1_loc-1]]
        shuffle(options)
        opt1 = options[0]
        trials2.addData('opt1_t1', opt1)
      End Routine:
        if key_resp_6.keys == 'right' and skip1 == False:
            cor1 = 1
        elif key_resp_6.keys == 'left' and skip1 == True:
            cor1 = 1
        else:
            cor1 = 0


        trials2.addData("cor1", cor1)

        correctRecord.append(cor1)
        correctRecord.append(0)
        correctRecord.append(1)
        stimTimRec.append(curStimTim)
        stimTimRec.append(0)
        stimTimRec.append(.2)
    ImageComponent option4_t1_2
      disabled = True
      image [set every repeat] = $opt4
      pos = (0, -.3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent option1_t1_2
      image [set every repeat] = $opt1
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent option2_t1_2
      disabled = True
      image [set every repeat] = $opt2
      pos = (0, .30)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent option3_t1_2
      disabled = True
      image [set every repeat] = $opt3
      pos = (.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'left','right', 'down', 'up'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trialMain
    VariableComponent curOpacity3_2
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    VariableComponent maskCol_2
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    VariableComponent curOpacity2_2
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    VariableComponent curOpacity_2
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    VariableComponent curImage_2
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        curImage = folder + curSet[0]
        curOpacity = 0
        curOpacity2 = 0
        curOpacity3 = .2
      Each Frame:
        t = trialClock.getTime()
        trials2.addData("curStimLen", stimLen)
        onSets = np.linspace(stimLen+isi, (stimLen+isi)*15, 15)
        offSets = np.linspace(stimLen, (stimLen+isi)*15 - isi, 15)

        if checkForOff: #there's an image on screen and we need to know to take it off
            if t>offSets[ii]:
                print(str(t) + "offset!")
                curOpacity2 = 1
                maskCol = [random.random(), random.random(), random.random()]
                checkForOff = False
                checkForOn = True
        else: #the mask is up right now, check for new image
            if t>onSets[ii]:
                print(str(t) + "onSet!")
                curOpacity2 = 0
                checkForOff = True
                checkForOn = False
                ii = ii + 1
                if ii==15:
                    continueRoutine = False
                elif ii==T2_loc+3:
                    trials2.addData('lastPresent', ii-1)
                    continueRoutine = False
                else:
                    curImage = folder + curSet[ii]
                    if T1_loc-1==ii:
                        if random.random()<skipProb: #skip target 1
                            curImage = folder + curSet[15]
                            trials2.addData('skip1', 1)
                            skip1 = True
                        else:
                            trials.addData('skip1', 0)
                            skip1 = False
                        curOpacity = 1
                    elif T2_loc-1==ii:
                        if random.random()<skipProb: #skip target 2
                            curImage = folder + curSet[16]
                            trials2.addData('skip2', 1)
                            skip2 = True
                        else:
                            trials2.addData('skip2', 0)
                            skip2 = False

                        curOpacity3 = 1
                    else:
                        curOpacity = 0
                        curOpacity3 = 0
    PolygonComponent polygon_8
      disabled = True
      fillColor = $[1,0,0]
      opacity [set every frame] = $curOpacity
      shape = triangle
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_9
      disabled = True
      fillColor = $[0,0,1]
      opacity [set every frame] = $curOpacity3
      shape = star
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
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    ImageComponent displayPicture_2
      image [set every frame] = $curImage
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_10
      fillColor [set every frame] = $[1,1,1]
      lineWidth = 0
      opacity [set every frame] = $curOpacity2
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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  Routine optionsMain
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        curSet = np.random.choice(picFiles,17, False)
        shuffle(curSet)
        for kk in range(0,17):
            trials2.addData('img'+str(kk), curSet[kk])

        ii = 0
        curImage = folder + curSet[ii]
        checkForOff = True
        checkForOn = False

        options = [folder + curSet[T1_loc-1],  folder + curSet[T2_loc-1]]
        #shuffle(options)
        opt1 = options[0]
        opt2 = options[1]
        #opt3 = options[2]
        #opt4 = options[3]
    ImageComponent option1_2
      image [set every repeat] = $opt1
      pos = (-.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.75
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    ImageComponent option2_2
      image [set every repeat] = $opt2
      pos = (0.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.75
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    TextComponent text_5
      letterHeight = 0.1
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = .5
      text = +
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  Routine trialMain2
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        curImage = folder + curSet[0]
        curOpacity = 0
        curOpacity2 = 0
        curOpacity3 = .2

        trialClock.reset()
      Each Frame:
        t = trialClock.getTime()
        onSets = np.linspace(stimLen+isi, (stimLen+isi)*15, 15)
        offSets = np.linspace(stimLen, (stimLen+isi)*15 - isi, 15)
        if checkForOff: #there's an image on screen and we need to know to take it off
            if t>offSets[ii]:
                print(str(t) + "offset!")
                curOpacity2 = 1
                maskCol = [random.random(), random.random(), random.random()]
                checkForOff = False
                checkForOn = True
        else: #the mask is up right now, check for new image
            if t>onSets[ii]:

                trials2.addData('t' + str(ii), t)
                print(str(t) + "onSet!")
                curOpacity2 = 0
                checkForOff = True
                checkForOn = False
                ii = ii + 1
                if ii==15:
                    continueRoutine = False
                    trials2.addData('lastPresent', ii-1)
                elif ii==T2_loc+3:
                    trials2.addData('lastPresent', ii-1)
                    continueRoutine = False
                else:
                    curImage = folder + curSet[ii]
                    if T1_loc-1==ii:
                        if random.random()<skipProb: #skip target 1
                            curImage = folder + curSet[15]
                            trials2.addData('skip1', 1)
                            skip1 = True
                        else:
                            trials2.addData('skip1', 0)
                            skip1 = False
                        curOpacity = 1
                    elif T2_loc-1==ii:
                        if random.random()<skipProb: #skip target 2
                            curImage = folder + curSet[16]
                            trials2.addData('skip2', 1)
                            skip2 = True
                        else:
                            trials2.addData('skip2', 0)
                            skip2 = False

                        curOpacity3 = 1
                    else:
                        curOpacity = 0
                        curOpacity3 = 0
    PolygonComponent polygon_11
      disabled = True
      fillColor = $[1,0,0]
      opacity [set every frame] = $curOpacity
      shape = triangle
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_12
      disabled = True
      fillColor = $[0,0,1]
      opacity [set every frame] = $curOpacity3
      shape = star
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
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    ImageComponent displayPicture_3
      image [set every frame] = $curImage
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_13
      fillColor [set every frame] = $[1,1,1]
      lineWidth = 0
      opacity [set every frame] = $curOpacity2
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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  Routine optionsMain_2
    CodeComponent code_13
      Code Type = Py
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      Begin Routine:
        curSet = np.random.choice(picFiles,17, False)
        shuffle(curSet)
        for kk in range(0,17):
            trials.addData('img'+str(kk), curSet[kk])

        ii = 0
        curImage = folder + curSet[ii]
        checkForOff = True
        checkForOn = False

        options = [folder + curSet[T1_loc-1],  folder + curSet[T2_loc-1]]
        #shuffle(options)
        opt1 = options[0]
        opt2 = options[1]
        #opt3 = options[2]
        #opt4 = options[3]
      Each Frame:
        #model = LogisticRegression(solver='liblinear', random_state=0).fit(curStimTim, correctRecord)
        if len(correctRecord)>5:

            y = np.array(correctRecord)
            x = np.reshape(np.array(stimTimRec), (-1,1))
           # params = np.array(params)


            if len(x[:,0]) < len(x[0,:]):
                x = x.T

            X = np.hstack((np.ones((len(x),1)),x))
            print(X)
            print(params)
            iterations = 50
            learning_rate = .03

            m = len(stimTimRec)

            for i in range(iterations):
                weights = sqrt(np.arange(0,len(y),1))
                weights = weights / sum(weights)
                weights = weights * len(y)
                params = params - (learning_rate/m) * (X.T @ ((1/(1+np.exp(-(X[:,0]*params[0] + X[:,1]*params[1])))) - y))

            if np.isnan(params[0]):
                params[0] = -1
                params[1] = 4
      End Routine:
        if len(correctRecord)>5:
            B1 = params[1]
            B0 = params[0]
            trials2.addData("B0", B0)
            trials2.addData("B1", B1)

            curStimTim = -((np.log(1/.80 - 1) + B0) / B1)
            curStimTim = curStimTim + np.random.rand() * .01 - .005

            if len(y)>10:
                if sum(y[len(y)-10:len(y)])>=8:
                    curStimTim = curStimTim - .005;
    ImageComponent option1_3
      image [set every repeat] = $opt1
      pos = (0, .3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.75
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    ImageComponent option2_3
      disabled = True
      image [set every repeat] = $opt2
      pos = (0.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.75
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    TextComponent text_7
      letterHeight = 0.1
      startVal [time (s)] = 2.5
      stopVal [duration (s)] = .5
      text = +
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  Routine trial_2
    VariableComponent curOpacity3_3
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    VariableComponent maskCol_3
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    VariableComponent curOpacity2_3
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    VariableComponent curOpacity_3
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    VariableComponent curImage_3
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    CodeComponent code_14
      Code Type = Py
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      Begin Routine:
        curImage = folder + curSet[0]
        curOpacity = 0
        curOpacity2 = 0
        curOpacity3 = .2

        trialClock.reset()
      Each Frame:
        t = trialClock.getTime()
        if phase == "ramp":
            curStimTim = stimLen
        trials2.addData('curStimTim', curStimTim)
        onSets = np.linspace(curStimTim+isi, (curStimTim+isi)*15, 15)
        offSets = np.linspace(curStimTim, (curStimTim+isi)*15 - isi, 15)
        if checkForOff: #there's an image on screen and we need to know to take it off
            if t>offSets[ii]:
                print(str(t) + "offset!")
                trials2.addData('stimOFF'+str(ii), str(t))
                curOpacity2 = 1
                maskCol = [random.random(), random.random(), random.random()]
                checkForOff = False
                checkForOn = True
        else: #the mask is up right now, check for new image
            if t>onSets[ii]:
                print(str(t) + "onSet!")
                trials2.addData('stimON'+str(ii), str(t))
                curOpacity2 = 0
                checkForOff = True
                checkForOn = False
                ii = ii + 1
                if ii==15:
                    continueRoutine = False
                    trials2.addData('lastPresent', ii-1)
                elif ii==T2_loc+3:
                    trials2.addData('lastPresent', ii-1)
                    continueRoutine = False
                else:
                    curImage = folder + curSet[ii]
                    if T1_loc-1==ii:
                        if random.random()<skipProb: #skip target 1
                            curImage = folder + curSet[15]
                            trials2.addData('skip1', 1)
                            skip1 = True
                        else:
                            trials2.addData('skip1', 0)
                            skip1 = False
                        curOpacity = 1
                    elif T2_loc-1==ii:
                        curImage = "blender.jpg"
                        if random.random()<skipProb: #skip target 2
                            curImage = folder + curSet[16]
                            trials2.addData('skip2', 1)
                            skip2 = True
                        else:
                            trials2.addData('skip2', 0)
                            skip2 = False

                        curOpacity3 = 1
                    else:
                        curOpacity = 0
                        curOpacity3 = 0
      End Routine:
        trials2.addData('curStimTim', curStimTim)
    PolygonComponent polygon_14
      disabled = True
      fillColor = $[1,0,0]
      opacity [set every frame] = $curOpacity
      shape = triangle
      size = (0.8, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_15
      disabled = True
      fillColor = $[0,0,1]
      opacity [set every frame] = $curOpacity3
      shape = star
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
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    ImageComponent displayPicture_4
      image [set every frame] = $curImage
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_16
      fillColor [set every frame] = $[1,1,1]
      lineWidth = 0
      opacity [set every frame] = $curOpacity2
      shape = rectangle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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  Routine response2_2
    PolygonComponent polygon_17
      fillColor = $[0,0,1]
      shape = star
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
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    TextComponent text_8
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Did you see a blender? 
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    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Routine:
        options = [folder + curSet[T2_loc-1]]
        shuffle(options)
        opt1 = options[0]

        trials2.addData('opt1_t1', opt1)
      End Routine:
        if key_resp_8.keys == 'right' and skip2 == False:
            cor2 = 1
        elif key_resp_8.keys == 'left' and skip2 == True:
            cor2 = 1
        else:
            cor2 = 0


        trials.addData("cor2", cor2)
    ImageComponent option1_t2_3
      disabled = True
      image [set every repeat] = $opt1
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent option2_t2_3
      disabled = True
      image [set every repeat] = $opt2
      pos = (0, .3)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    ImageComponent option3_t2_3
      disabled = True
      image [set every repeat] = $opt3
      pos = (.3, 0)
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'left','right', 'up', 'down'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent textbox_5
      bold = False
      editable = False
      font = Browallia New
      letterHeight = 0.05
      padding = None
      startVal [time (s)] = 0.0
      text =                             ท่านเห็นเครื่องปั่นหรือไม่ 
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditions = [OrderedDict([('trialType', 'AB'), ('cndTyp', 'lag6'), ('lag', 6), ('T1_loc', 5), ('T2_loc', 11), ('stimLen', 0.2), ('isi', 0.05), ('skipProb', 0.5)])]
    conditionsFile = conditionAB.xlsx
    loopType = random
    nReps = 1
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    Routine options
    Routine trial
    Routine response1
    Routine response2
    Routine feedback
    Routine break_2
  LoopTerminator trials
  Routine mainInstructions
  LoopInitiator trials2 loopType="TrialHandler"
    conditionsFile = conditionAB_main.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('trialType', 'AB'), ('cndTyp', 'lag6'), ('lag', 6), ('T1_loc', 5), ('T2_loc', 11), ('stimLen', 0.2), ('isi', 0.05), ('skipProb', 0.5), ('phase', 'ramp')]),
      OrderedDict([('trialType', 'AB'), ('cndTyp', 'lag4'), ('lag', 4), ('T1_loc', 4), ('T2_loc', 8), ('stimLen', 0.193334), ('isi', 0.046666667), ('skipProb', 0.48), ('phase', 'ramp')]),
      OrderedDict([('trialType', 'AB'), ('cndTyp', 'lag7'), ('lag', 7), ('T1_loc', 4), ('T2_loc', 11), ('stimLen', 0.186668), ('isi', 0.043333334), ('skipProb', 0.45999999999999996), ('phase', 'ramp')]),
      OrderedDict([('trialType', 'AB'), ('cndTyp', 'lag5'), ('lag', 5), ('T1_loc', 5), ('T2_loc', 10), ('stimLen', 0.180002), ('isi', 0.040000001), ('skipProb', 0.43999999999999995), ('phase', 'ramp')]),
      OrderedDict([('trialType', 'AB'), ('cndTyp', 'lag2'), ('lag', 2), ('T1_loc', 3), ('T2_loc', 5), ('stimLen', 0.173336), ('isi', 0.036666668), ('skipProb', 0.41999999999999993), ('phase', 'ramp')]),
      OrderedDict([('trialType', 'AB'), ('cndTyp', 'lag3'), ('lag', 3), ('T1_loc', 5), ('T2_loc', 8), ('stimLen', 0.16666999999999998), ('isi', 0.033333335), ('skipProb', 0.3999999999999999), ('phase', 'ramp')]),
      OrderedDict([('trialType', 'AB'), ('cndTyp', 'lag1'), ('lag', 1), ('T1_loc', 4), ('T2_loc', 5), ('stimLen', 0.16000399999999998), ('isi', 0.030000001999999998), ('skipProb', 0.3799999999999999), ('phase', 'ramp')])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
    Routine optionsMain_2
    Routine trial_2
    Routine response1Main
    Routine response2_2
    Routine break_2
  LoopTerminator trials2
